import java.util.Date;
import java.text.DateFormat;
import java.text.SimpleDateFormat;

import org.micromanager.data.Datastore;
import org.micromanager.display.DisplayWindow;
import org.micromanager.PositionList;
import org.micromanager.LogManager;
import mmcorej.TaggedImage;
import org.micromanager.data.Image;
import org.micromanager.data.Coords;
import org.micromanager.data.Coordinates;
import org.micromanager.internal.utils.MMException;

import org.micromanager.data.DataProvider;
import ij.process.ImageProcessor ;
import org.micromanager.data.Image;
import ij.ImageStack;
import ij.ImagePlus;
import ij.IJ;
import ij.measure.ResultsTable;
import ij.gui.ProfilePlot;
import ij.plugin.ImageCalculator;
import ij.plugin.filter.Analyzer;
import ij.io.FileInfo;
import java.io.*;


source("C:/Users/OPMuser/Documents/micromanager/mmgr-opm-scripts/helpers.bsh");
source("C:/Users/OPMuser/Documents/micromanager/mmgr-opm-scripts/prefind/coverslip_z_analyse.bsh");
source("C:/Users/OPMuser/Documents/micromanager/mmgr-opm-scripts/prefind/get_rows_and_cols.bsh");
source("C:/Users/OPMuser/Documents/micromanager/mmgr-opm-scripts/prefind/find_spheroid_xycom.bsh");
source("C:/Users/OPMuser/Documents/micromanager/mmgr-opm-scripts/prefind/acqFromBufferImageplus.bsh");

mmc = mm.getCMMCore();
sc = mm.getScriptController();

// print("In correct file");

// Image while scanning; hardcoded positions for the spheroids
// For FRET timelapse imaging of several fields
// Deleted comments (see in 0.2_one_field)
String zStageName = "ZAxis";
String stageName = mmc.getXYStageDevice();
String cam = "pco_camera_bis"; 	
String acq = "acq_rfl"; 	
port_xy = "COM1";

DateFormat dateFormat = new SimpleDateFormat("yy-MM-dd/HH-mm-ss");
Date date = new Date();

savepath = "E:/nina/test/coverslip_and_z_com/" + dateFormat.format(date) + "/";

new File(savepath).mkdirs();

filedir = "E:/acquisition control files/";

sc.message("Cleaning up");
/////////////////////////////////////////////////////////////////////
// Clean everything before beginning
cleanup(cam,"",stageName);
sc.message("Successfully cleaned up");
//sc.message("Test");
// User-defined parameters
/////////////////////////////////////////////////////////////////////

// General parameters

	// cslip prefind params
	// max_z = 38500;
	// starting_z = 41000;
	max_z = -20800;
	starting_z = -18600;
	step_z = -300;  // negative!!
	// bg_z = 0;
	cslip_exp = 2;
	min_size = 5500;

	bg_z = starting_z + 1500;

	// z prefind
	find_spheroids = true;  // actually run the spheroid finding;

	// pre_thresh = 300;
	// currently not used v! 
	mip_spheroid_otsuthresh = 150; // freely chosen, trial and error
	//

	spheroid_min_area_um = 1200;
	get_xy_com = true; // whether to run code to optimise x and y positions during z pf
	
	// check that WD doesn't include cslip thickness?
	max_dist_from_cslip = -1600; // (0.28-0.17)mm - safety_amount;
	z_step_spheroid = -400;  // negative!!
	coverslip_thickness = 1200; // slight underestimate (for safety?)
	scan_speed = 0.1;
	nimgs = 10;
	y_scanwidth_um = 250;
	img_time_intervals = y_scanwidth_um/(nimgs*scan_speed);
	trg_dist = (double) y_scanwidth_um / (double) nimgs;
	unset("n_img");
	n_img = (int) Math.ceil((double) (((double)y_scanwidth_um)) / ((double) trg_dist)); 
	
	duty_cycle = 0.5;  // 50% of time between images exposues camera (continuous scanning)
	exposure_for_scan = img_time_intervals*duty_cycle;
	// exposure_for_scan = 5;  // just override, snap is too slow for this

	timeout_between_frames = img_time_intervals * 10;

	mmc.initializeCircularBuffer();
	
	/////////////////////////////////////////////////////////////////////
	// Filter wheel positions and laser channels

	// choices for finding the shperoid, coverslip uses channel 3 (642) and no filter
	// (count from 0)
	unset("fw_pos");
	int fw_pos = 2;
	int las_channel =  2; // DAQ channels corresponding to each fw pos
	int[] wavelengths = {457, 515, 561, 642};
	float spheroid_las_amplitude = 2.0;
	
	update_z = true;
	
	minfind_otsuthresh = 7500; // minimum value for otsu thresh to
							      // be considered to contain coverslip
	pc_z_offset = 0.1; // percentage of z FOV to place bottom of spheroid at 

	double travel_speed = 10;  // travel speed mms/(?)

	movetimeout_s = 60;  // timeout for stage travel
	scan_tries = 3;  // general retry count until skipping field
	max_retries = 3;  // maximum number of retries before skipping
	max_field_skips = 3; // maximum skips per run before stopping
	max_dropped_frames = 1; // maximum dropped frames
	

	filter_naming = true;
	delete_mode = false; // delete files after acquiring


/////////////////////////////////////////////////////////////////////

PositionList pl = mm.positions().getPositionList();
pl.save(savepath + "original.pos");

// get array of stage positions for the scan, dist_from_ctr = 
// half of the total scan distance, is measured from centre of y_bg

n_pos = pl.getNumberOfPositions();
print("");
// define arrays
int[][] rows_and_cols = get_rows_and_cols();


int[] x_pos = new int[n_pos];
int[] y_pos = new int[n_pos];

int[] spheroid_x_positions = new int[n_pos];
int[] spheroid_y_positions = new int[n_pos];

int[] coverslip_z_positions = new int[n_pos];
int[] spheroid_z_positions = new int[n_pos];

ObjectOutputStream spheroid_x_out = new ObjectOutputStream(
    new FileOutputStream(savepath + "spheroid_x.ser")
);
ObjectOutputStream spheroid_y_out = new ObjectOutputStream(
    new FileOutputStream(savepath + "spheroid_y.ser")
);
ObjectOutputStream spheroid_z_out = new ObjectOutputStream(
    new FileOutputStream(savepath + "spheroid_z.ser")
);
ObjectOutputStream coverslip_z_out = new ObjectOutputStream(
    new FileOutputStream(savepath + "coverslip_z.ser")
);

// reload previous failed attempt
start_from_f = 1;
load_dir = null;//"E:/nina/20230321_drug_plate1/coverslip_and_z_com_thursday/23-03-23/18-09-47/";
if (start_from_f != 0 && load_dir != null){

	ObjectInputStream ser_spheroid_x = new ObjectInputStream(new FileInputStream(load_dir + "spheroid_x.ser"));
	spheroid_x_positions = ser_spheroid_x.readObject();

	ObjectInputStream ser_spheroid_y = new ObjectInputStream(new FileInputStream(load_dir + "spheroid_y.ser"));
	spheroid_y_positions = ser_spheroid_y.readObject();

	ObjectInputStream ser_spheroid_z = new ObjectInputStream(new FileInputStream(load_dir + "spheroid_z.ser"));
	spheroid_z_positions = ser_spheroid_z.readObject();

	ObjectInputStream ser_cslip_z = new ObjectInputStream(new FileInputStream(load_dir + "coverslip_z.ser"));
	coverslip_z_positions = ser_cslip_z.readObject();
}

BufferedWriter wells = new BufferedWriter(new FileWriter(savepath + "position_names.csv"));

// get x y position arrays
for (pos_i=0; pos_i<n_pos; pos_i++){
	mp = pl.getPosition(pos_i);
	x_pos[pos_i] = (int) Math.floor(mp.getX()); 
	y_pos[pos_i] = (int) Math.floor(mp.getY());  
	f = mp.get(zStageName);
	wells.write(""+pos_i+","+mp.label+",\n");
}

//fields_to_skip = {1, 170, 171, 163};

// LOG //////////////////////////////////////////////////////////////
BufferedWriter log 
	= new BufferedWriter(new FileWriter(savepath + "log.txt"));
log.write("Start of log date: " + dateFormat.format(date) + "\n");
log.flush();

BufferedWriter debug 
	= new BufferedWriter(new FileWriter(savepath + "debug.txt"));
debug.write("Start of log date: " + dateFormat.format(date) + "\n");
debug.flush();

///////////////////////////////////////////////////////////////////////////////
// Error counts //
move_well_n_err = 0;
setup_n_err = 0;
scan_start_n_err = 0;
scan_end_n_err = 0;

///////////////////////////////////////////////////////////////////////////////


Exception err_out; // setting up exception for this scope
log_fieldinfo = "";

mag = 20.4*1.34;  // 20.4 number calculated somewhere...
px_size_um = 6.5;

mmc.setCameraDevice(cam);
	w = (int) mmc.getImageWidth();
	h = (int) mmc.getImageHeight();
	d = (int) mmc.getBytesPerPixel();
	iD = (int) mmc.getImageBitDepth();

// Move to the first position
sc.message("Travel");
travelToPositionRetry(
	bg_z,x_pos[start_from_f], y_pos[start_from_f],travel_speed,stageName,zStageName,
	movetimeout_s,debug);
skip_count = 0;

time_begin = System.currentTimeMillis();
sc.message("Time : " + time_begin);

// ONLY ONE FILTER WHEEL POSITION/CHANNEL IMPLEMENTED
mmc.setProperty(cam, "Triggermode","Internal");  
mmc.setExposure(cslip_exp);

PositionList pl_cslip = new PositionList();  // new empty pos list
PositionList pl_spheroid = new PositionList();  // new empty pos list

// get the bg image (once)
mmc.setState("FW103H Filter Wheel", 0);
writeToFile("E:/acquisition control files/las_control.txt", "3,0.1");
images = mm.live().snap(false);
image = images.get(0);
iProcessor = mm.data().ij().createProcessor(image);
mmc.waitForSystem();
writeToFile("E:/acquisition control files/las_control.txt", "4,0.0");
bg_imgplus = new ImagePlus("bg", iProcessor);
// IJ.run(bg_imgplus, "Multiply...", "value=1.20");
IJ.saveAs(bg_imgplus, "Tiff", savepath+"/bg.tif");

// create csv files to restart any crashed code
// save well names
BufferedWriter row_col_z = new BufferedWriter(new FileWriter(savepath + "row_col_z.csv"));
BufferedWriter coverslip_z = new BufferedWriter(new FileWriter(savepath + "coverslip_z.csv"));

BufferedWriter row_col_spheroid_xyz = new BufferedWriter(new FileWriter(savepath + "row_col_spheroid_xyz.csv"));
BufferedWriter spheroid_z = new BufferedWriter(new FileWriter(savepath + "spheroid_z.csv"));

// reload files

found_last = false;
z_current = starting_z;

for(f=start_from_f; f < n_pos; f++) {  // fields
	print("Field "+ f);
	found = false;
	mmc.setExposure(cslip_exp);  // reset exp for scatter
	full_dir = savepath +  "/cslip_images/field_" +  f + "/";
	datastore = mm.data().createMultipageTIFFDatastore(full_dir, false, false);
	Coords.Builder coordsBuilder = Coordinates.builder();
	if (!found_last){  // keep z the same if we found it last time
		z_current = starting_z;
		setZPositionQuick(zStageName, z_current);
	}
	label = "";
	n = 0;  // don't think we need it
	while (z_current >= max_z){
		Date date = new Date();
		datestr = dateFormat.format(date);
		log_fieldinfo = "\n" + datestr + " Field: " + f + " ";
		debug.write(log_fieldinfo);
		debug.flush();
		mmc.setState("FW103H Filter Wheel", 0);

		try {
			waitForZnew();  // we set z moving in the previous loop
		} catch (Exception e) {
			print("marzhauser causing serial problems yet again");
		}
		checkXYZWait(stageName, zStageName, x_pos[f],
						y_pos[f], z_current, debug, 10); // check end is correct

		cb = mm.data().getCoordsBuilder().z(0).c(0).p(0).t(0);

		ImageStack stack;
		ImagePlus imgplus;

		writeToFile("E:/acquisition control files/las_control.txt", "3,0.1");
		images = mm.live().snap(false);
		image = images.get(0);
		iProcessor = mm.data().ij().createProcessor(image);
		// mmc.waitForSystem();  // throws an uncaught except apparently if XY stage times out...
		writeToFile("E:/acquisition control files/las_control.txt", "4,0.0");
		
		imgplus = new ImagePlus("coverslip", iProcessor);
		
		// for saving stack (for debugging)
		coordsBuilder = coordsBuilder.p(n);
		tmp = image.copyAtCoords(coordsBuilder.build());
		datastore.putImage(tmp);
		
		// subtract objective scatter etc.
		imcalc = new ImageCalculator();
		// print("subtract image");
		imcalc.run("Subtract", imgplus, bg_imgplus);
		// print("image subtracted");
		
		// do imageJ stuff for prefind
		process_start = System.currentTimeMillis();
		find_output = find_coverslip_z(imgplus, minfind_otsuthresh, false, true);
		time_process = System.currentTimeMillis() - process_start;
		// sc.message("processing time: " + time_process + "ms");
		
		z_relative = find_output[0];
		err = find_output[1];
		// print(err);
		z_real = z_current;
		if (err != 0){
			sc.message("Failed to find coverslip at this z: " + z_current);
			// start the move to save some time
			// little bit of code so that we don't start from lowest z every time - saves time
			if (found_last){  // if we kept z the same and didnt find, start from beginning
				sc.message("Starting again at lowest z after failing to find at same z as previous");
				z_current = starting_z;
				setZPositionNonBlocking(zStageName, z_current);
				n = 0;
				found_last = false;  // so we don't get stuck
			} else if (z_current + step_z >= max_z ){  // don't move if going to be too far
				z_current += step_z;  // next z
				setZPositionNonBlocking(zStageName, z_current);  // done to be a bit faster
			} else {  // z_current + step_z < max_z 
				coverslip_z_positions[f] = (int)starting_z;
				break;  // unecessary, but safe
			}
		} else {
			z_real += z_relative;
			sc.message("Found coverslip at z: " + z_real);
			sc.message("z_relative: " + z_relative);
			sc.message("z_current: " + z_current);
			found = true;
		}
		if (f > 0 && Math.abs(z_real - coverslip_z_positions[f-1]) > 1000){
			sc.message("Probably found second surface! choosing first surface");
			z_real += 1700;  // probably found the second surface instead
		} else {
			coverslip_z_positions[f] = (int)z_real;
		};
		n++;
		if (found) break;  // no more Z
	} //z 
	datastore.freeze();
	datastore.close();
	mp = pl.getPosition(f);
	label = mp.getLabel();
	x = (int) Math.floor(mp.getX()); 
	y = (int) Math.floor(mp.getY());  
	msp = new MultiStagePosition(stageName, x, y, zStageName, coverslip_z_positions[f]);
	// remove the FAILED tag
	// TODO move this to end so that alphabetic order isnt affected
	// i.e.:
	// if (label.substring(label.length()-7,label.length()).equals("FAILED-")) label = label.substring(7,label.length());

	if (label.substring(0,7).equals("FAILED-")) label = label.substring(7,label.length());
	if (label.substring(0,11).equals("NO-SPHEROID")) label = label.substring(11,label.length());
	
	if (found) msp.setLabel(label);
	else msp.setLabel("FAILED-"+label);
	
	pl_cslip.addPosition(msp);

	found_last = found;
	
	spheroid_z_positions[f] = coverslip_z_positions[f] - coverslip_thickness;
	
	// now find the spheroid ----------------------------------------------///
	//---------------------------------------------------------------------///
	
	if (found && find_spheroids) {
		mmc.setState("FW103H Filter Wheel", fw_pos);
		cslip_2_z = coverslip_z_positions[f] - coverslip_thickness;
		z_current_prefind = cslip_2_z;
		setZPositionQuick(zStageName, z_current_prefind);
		z_above_cslip = 0;
		mmc.setExposure(exposure_for_scan);
		spheroid_found = false;
		finfo.pixelDepth = (double)y_scanwidth_um/nimgs;
		
		writeToFile(filedir + "las.txt","" + spheroid_las_amplitude);
		writeToFile(filedir + "exp.txt","" + exposure_for_scan);
		writeToFile(filedir + "las_channel.txt", "" + las_channel);

		// print("trig: " + trg_dist);
		// print("scan dist:" + y_scanwidth_um);
		// print("nimgs: "+ nimgs);
		// setUpStageRetry(port_xy,trg_dist,scan_speed,scan_tries);
		x_com = 0;
		y_com = 0;

		spheroid_found = false;
		
		while (z_above_cslip >= max_dist_from_cslip){  // note inequality, negative vals
			print("Searching for spheroid at "+ z_current_prefind);
			ImageStack stack;
			ImagePlus imgplus;
			x_com = 0;
			y_com = 0;

			// random safety measure, shouldn't be needed but I'm paranoid
			// 500 for allowing highest cslips, but if we find bottom cslip should certainly
			// not be at the top of the FOV (aka 1000)
			if (z_current_prefind < max_z - 500 + max_dist_from_cslip - coverslip_thickness){
				sc.message("Exceeded max Z height! Skipping");
				sc.message("NO SPHEROID FOUND");
				spheroid_z_positions[f] = cslip_2_z;  // min z
				break;
				// throw MMException("Why are you going this high?"); // remember negative
			}
			
			travelToPositionRetry(
				z_current_prefind,x_pos[f],y_pos[f]-(y_scanwidth_um/2),travel_speed,stageName,zStageName,movetimeout_s,debug);
			start_setup = System.currentTimeMillis();
			// setupstage is really slow, find a faster way to set trigger on
			setUpStageRetry(port_xy,trg_dist,scan_speed,scan_tries);  // travel sets the stage speed, have to set it back
			setupstage_time = System.currentTimeMillis() - start_setup;
			// print("setup stage time: " + setupstage_time + "ms");
			bufferstart = System.currentTimeMillis();
			mmc.clearCircularBuffer();
			buffertime = System.currentTimeMillis() - bufferstart;
			// print("buffer time: " + buffertime + "ms");
			sq_start = System.currentTimeMillis();
			mmc.setProperty(cam, "Triggermode","External");  
			mmc.prepareSequenceAcquisition(cam);
			mmc.startSequenceAcquisition(nimgs, 0, true);
			// print("sequence prep: " + (System.currentTimeMillis() - sq_start) + "ms");
			lv_start = System.currentTimeMillis();
			labviewFileAcqStart(filedir);
			// print("setup with labview time: " + (System.currentTimeMillis() - lv_start) + "ms");
			setXYPositionForAcqRetry(stageName, x_pos[f],y_pos[f]+(y_scanwidth_um/2), scan_tries);
			setup_time = System.currentTimeMillis() - start_setup;
			print("setup time: " + setup_time + "ms");
			start_time = System.currentTimeMillis();
			// acquisition loop
			// get the imageplus stack from buffer
			// print("about to acq");
			// imgplus = acqImagesFromBufferImgplus(nimgs, timeout_between_frames, 1);
			imgplus = acqImagesNoTriggerImgplus(nimgs, img_time_intervals);
			// lazy method that worked before to test....

			
			// ImagePlus imgplus new ImagePlus(); //
			labviewFileAcqStop(filedir);
			mmc.stopSequenceAcquisition();
			mmc.setProperty(cam, "Triggermode","Internal");  

			print("stack acquired");
			
			fi = imgplus.getFileInfo();
			fi.pixelDepth = (double)y_scanwidth_um/nimgs;  // for calculating y_com
			imgplus.setFileInfo(fi);  // may not be necessary? might be a reference
			
			z_prefind_savedir = savepath + "/spheroid_images/field_" +  f + "/z_" + z_above_cslip + "/" ;
			if (!z_prefind_savedir.equals("")) new File(z_prefind_savedir).mkdirs();
			
			//find_sph_out = find_spheroid_z(imgplus, mip_spheroid_otsuthresh, true, get_xy_com, z_prefind_savedir, min_size);
			// params: image, trigger distance (um), max x shift (um), max y shift (um), max z shift (um), min spheroid area (um)
			spheroid_min_area_um_t = spheroid_min_area_um;
			//print(label.substring(0,4));
			if (label.substring(0,4).equals("Bead")) {
				print("Bead well, no limit on particle size");
				spheroid_min_area_um_t = 1;
			}
			find_sph_out = find_spheroid_xycom(imgplus, trg_dist, 500, 500, 1000, spheroid_min_area_um_t);
			if (!z_prefind_savedir.equals("")) IJ.saveAs(imgplus, "Tiff", z_prefind_savedir+"/spheroid.tif");
			
			spheroid_relative_z = find_sph_out[2];
			x_com = find_sph_out[0];
			y_com = find_sph_out[1];
			spheroid_err = find_sph_out[3];  // successful or not
			
			spheroid_z_real = z_current_prefind;
			if (spheroid_err == 0){
				if (z_current_prefind + spheroid_relative_z > cslip_2_z - coverslip_thickness + max_dist_from_cslip){
						spheroid_z_real = z_current_prefind + spheroid_relative_z;
				}	
				sc.message("Spheroid found at " + spheroid_z_real + ", relative position " + spheroid_relative_z);
				spheroid_found = true;
				spheroid_z_positions[f] = spheroid_z_real;
				spheroid_found = true;
				break;
			} else {
				sc.message("Failed to find spheroid at this z: " + z_current_prefind);
				if (z_above_cslip + z_step_spheroid <= max_dist_from_cslip){
					sc.message("NO SPHEROID FOUND");
					spheroid_z_positions[f] = cslip_2_z;  // min z
					break; // for safety not necessary but hey
				}
			}
			z_above_cslip += z_step_spheroid;
			z_current_prefind += z_step_spheroid;
		}
		if (get_xy_com){
			print("x_com: "+ x_com);
			print("y_com " + y_com);
			
			print("x before: "+ x);
			print("y before " + y);
			
			x += x_com;
			y += y_com;

			print("x after: "+ x);
			print("y after " + y);

			spheroid_x_positions[f] = x_com;
			spheroid_y_positions[f] = y_com;
		}
		// save the spheroid image?
		// imgplus is closed in com xy code, save it before running that TODO
		
		msp_s = new MultiStagePosition(stageName, x, y, zStageName, spheroid_z_positions[f]);
		print(label);
		if (spheroid_found) msp_s.setLabel(label);
		else msp_s.setLabel("NO-SPHEROID-"+label);
		pl_spheroid.addPosition(msp_s);					
	} //
	else {  // if coverslip part failed (or we don't run spheroid finding)
		msp_s = msp;  // same as cslip one from before
		pl_spheroid.addPosition(msp);
	}
	// write coverslip height data into csv

	coverslip_z.write(coverslip_z_positions[f] + "\n");
	row_col_z.write(rows_and_cols[f][0] + "," + rows_and_cols[f][1] +
		"," + coverslip_z_positions[f] + "\n");
	
	// write centre of mass data into csv
	row_col_spheroid_xyz.write(rows_and_cols[f][0] + "," + rows_and_cols[f][1] +
	"," + spheroid_x_positions[f] + "," + spheroid_y_positions[f] + "," + spheroid_z_positions[f] + "\n");
	
	spheroid_x_out.writeObject(spheroid_x_positions);
	spheroid_y_out.writeObject(spheroid_y_positions);
	spheroid_z_out.writeObject(spheroid_z_positions);
	coverslip_z_out.writeObject(coverslip_z_positions);

	spheroid_x_out.flush();
	spheroid_y_out.flush();
	spheroid_z_out.flush();
	coverslip_z_out.flush();
	
	wells.flush();
	coverslip_z.flush();
	row_col_z.flush();
	spheroid_z.flush();
	row_col_spheroid_xyz.flush();

	// Move to the next position/field
	g = f < (n_pos-1) ? f+1 : 0;
	if (g == 0) z_current = starting_z;  // safety
	travelToPositionRetry(
		z_current,x_pos[g],y_pos[g],travel_speed,stageName,zStageName,movetimeout_s,debug);
} // field loop

if (update_z){
	if (find_spheroids) mm.positions().setPositionList(pl_spheroid);
	else mm.positions().setPositionList(pl_cslip);
}
pl_cslip.save(savepath + "coverslips.pos");

time_end = System.currentTimeMillis();
delta_t = Math.max(0,Math.round((time_end - time_begin)/1000)); // seconds
sc.message("Total took " + delta_t + "s");		

// reset filter position
mmc.setState("FW103H Filter Wheel", fw_pos);

wells.close();
coverslip_z.close();
row_col_z.close();

row_col_spheroid_xyz.close();
spheroid_z.close();

spheroid_x_out.close();
spheroid_y_out.close();
spheroid_z_out.close();
coverslip_z_out.close();

tot_err = move_well_n_err + setup_n_err + scan_start_n_err + scan_end_n_err;

/*if (update_xyz_after){
	for (i=0; i<n_pos; i++){
	mp = pl.getPosition(i);
	x_new = (int) Math.floor(mp.getX()) + spheroid_x_positions[i]; 
	y_new = (int) Math.floor(mp.getY()) + spheroid_y_positions[i];  
	z_new = spheroid_z_positions[i];

	}
}*/

log.write("\n Ended with " + tot_err + " error(s):\n");
log.write(move_well_n_err + " moving to well error(s)\n");
log.write(setup_n_err + " setting up scan error(s)\n");
log.write(scan_start_n_err + " scan starting error(s)\n");
log.write(scan_end_n_err + " scan end error(s)\n");
log.flush();
log.close();
debug.close();